<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:p1="clr-namespace:System.Reactive;assembly=System.Reactive.Core"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:bv="clr-namespace:BonVision;assembly=BonVision"
                 xmlns:p2="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="RootPath" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>RootPath</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="PortName" />
        <Property Name="Value" DisplayName="ValveOpenTime" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Hardware</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>BehaviorCommands</rx:Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:Device">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Enabled</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COMx</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>BehaviorEvents</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Lickometer</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>BehaviorEvents</Name>
                  </Expression>
                  <Expression xsi:type="beh:Parse">
                    <harp:Register xsi:type="beh:TimestampedDigitalInputState" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LickometerPort</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="HasFlag">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="beh:DigitalInputs">
                      <Value>None</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:DistinctUntilChanged" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Seconds</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:CreateTimestamped" />
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>LickOnsetEvent</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="LickometerPort" />
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="WorkflowProperty(beh:DigitalInputs),beh:DigitalInputs">
                    <MemberName>Value</MemberName>
                    <Value>DIPort0</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>LickometerPort</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="8" Label="Source1" />
                  <Edge From="2" To="5" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="9" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Valve</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>50</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>ValveOpenTimeMs</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>BehaviorEvents</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="beh:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="beh:CreateOutputPulseEnablePayload">
                      <beh:OutputPulseEnable>SupplyPort0</beh:OutputPulseEnable>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>BehaviorCommands</Name>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:Unit">
                    <rx:Name>GiveReward</rx:Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ValveOpenTimeMs</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="beh:Format">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Register xsi:type="beh:PulseSupplyPort0" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>BehaviorCommands</Name>
                  </Expression>
                  <Expression xsi:type="beh:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="beh:CreateOutputSetPayload">
                      <beh:OutputSet>SupplyPort0</beh:OutputSet>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>BehaviorCommands</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="7" To="9" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Wheel</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>BehaviorEvents</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="beh:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="beh:CreateEnableEncodersPayload">
                      <beh:EnableEncoders>EncoderPort2</beh:EnableEncoders>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>BehaviorCommands</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>BehaviorEvents</Name>
                  </Expression>
                  <Expression xsi:type="beh:Parse">
                    <harp:Register xsi:type="beh:TimestampedAnalogData" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.Encoder</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Seconds</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:CreateTimestamped" />
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>Encoder</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="5" To="7" Label="Source1" />
                  <Edge From="6" To="8" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BehaviorEvents</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:GroupByRegister" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RootPath</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}/Behavior.harp/Behavior</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:MessageWriter">
                <harp:FileName>Behavior</harp:FileName>
                <harp:Suffix>None</harp:Suffix>
                <harp:Buffered>true</harp:Buffered>
                <harp:Overwrite>false</harp:Overwrite>
                <harp:FilterType>Include</harp:FilterType>
                <harp:MessageType xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT2S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="harp:CreateOperationControlPayload">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:MuteReplies>false</harp:MuteReplies>
                <harp:VisualIndicators>Off</harp:VisualIndicators>
                <harp:OperationLed>Off</harp:OperationLed>
                <harp:Heartbeat>Enabled</harp:Heartbeat>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BehaviorCommands</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="13" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:EnumerateFiles">
          <io:Path>stimuli\images</io:Path>
          <io:SearchPattern>*.tiff</io:SearchPattern>
          <io:SearchOption>TopDirectoryOnly</io:SearchOption>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Random</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="num:Variation">
          <num:Count>8</num:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>LoadImages</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:LoadImage">
                <gl:Width xsi:nil="true" />
                <gl:Height xsi:nil="true" />
                <gl:InternalFormat>Rgba</gl:InternalFormat>
                <gl:WrapS>Repeat</gl:WrapS>
                <gl:WrapT>Repeat</gl:WrapT>
                <gl:MinFilter>Linear</gl:MinFilter>
                <gl:MagFilter>Linear</gl:MagFilter>
                <gl:FileName>stimuli\images\2092.tiff</gl:FileName>
                <gl:ColorType>Unchanged</gl:ColorType>
                <gl:FlipMode>Vertical</gl:FlipMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="3" Label="Source2" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>SelectedImages</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>LickOnsetEvent</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Change Flash</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0.15S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TimedGate">
          <rx:TimeSpan>PT0.6S</rx:TimeSpan>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Throttle">
          <rx:DueTime>PT0.6S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="MulticastSubject">
        <Name>GiveReward</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
        <Format>Reward</Format>
        <Selector xsi:nil="true" />
        <Name>Allen.Log</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="num:CreateRandom">
          <num:Seed xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Random</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="..\MPE_workflows\Allen.InitView.bonsai" />
      <Expression xsi:type="rx:PublishSubject">
        <Name>View</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="..\MPE_workflows\Allen.OutputSyncStimRender.bonsai" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>View</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="..\MPE_workflows\Allen.DrawPhotodiode.bonsai" />
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="..\MPE_workflows\Allen.OutputSyncPhotodiode.bonsai" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RootPath</Name>
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0}/bonsai_event_log.csv</Format>
        <Selector>it</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.FrameEventLogger.bonsai">
        <Name>Allen.Log</Name>
        <Append>false</Append>
        <Overwrite>true</Overwrite>
        <Suffix>None</Suffix>
        <FileName>c:\programdata\AIBS_MPE\bonsai_workflows\data\202256134545_bonsai_event_log.csv</FileName>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
        <Format>Frame</Format>
        <Selector xsi:nil="true" />
        <Name>Allen.Log</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:Timer">
          <gl:DueTime>PT1H</gl:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="..\MPE_workflows\Allen.End.bonsai" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
        <Format>EndFrame</Format>
        <Selector xsi:nil="true" />
        <Name>Allen.Log</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="SubscribeSubject">
        <Name>LickOnsetEvent</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
        <Format>Lick</Format>
        <Selector xsi:nil="true" />
        <Name>Allen.Log</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SelectedImages</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Random</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="num:Permutation" />
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>View</Name>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Format">
              <Format>StartFlash - {0}</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Format" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
              <Format>StartFlash - stimuli\images\28083.tiff</Format>
              <Selector xsi:nil="true" />
              <Name>Allen.Log</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Flash Sequence</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>Flash</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>PositionImage</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="rx:Sink">
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>Item2</Selector>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="gl:BindTexture">
                                        <gl:TextureSlot>Texture0</gl:TextureSlot>
                                        <gl:ShaderName>Image</gl:ShaderName>
                                        <gl:TextureTarget>Texture2D</gl:TextureTarget>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                    <Edge From="1" To="2" Label="Source1" />
                                    <Edge From="2" To="3" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item1</Selector>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="ExtentX" />
                                <Property Name="ExtentY" />
                                <Property Name="LocationX" />
                                <Property Name="LocationY" />
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Value" DisplayName="Angle" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="bv:AngleProperty">
                                  <bv:Value>0</bv:Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Angle" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="GroupWorkflow">
                                <Name>Transform</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="ExternalizedMapping">
                                      <Property Name="X" DisplayName="LocationX" />
                                      <Property Name="Y" DisplayName="LocationY" />
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="gl:Translate">
                                        <gl:Order>Prepend</gl:Order>
                                        <gl:X>0</gl:X>
                                        <gl:Y>0</gl:Y>
                                        <gl:Z>0</gl:Z>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="ExternalizedMapping">
                                      <Property Name="X" DisplayName="ExtentX" />
                                      <Property Name="Y" DisplayName="ExtentY" />
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="gl:Scale">
                                        <gl:Order>Prepend</gl:Order>
                                        <gl:X>120</gl:X>
                                        <gl:Y>95</gl:Y>
                                        <gl:Z>1</gl:Z>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="ExternalizedMapping">
                                      <Property Name="Angle" />
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="gl:RotateZ">
                                        <gl:Order>Prepend</gl:Order>
                                        <gl:Angle>0</gl:Angle>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="gl:UpdateUniform">
                                        <gl:UniformName>transform</gl:UniformName>
                                        <gl:ShaderName>Image</gl:ShaderName>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="2" Label="Source1" />
                                    <Edge From="1" To="2" Label="Source2" />
                                    <Edge From="2" To="4" Label="Source1" />
                                    <Edge From="3" To="4" Label="Source2" />
                                    <Edge From="4" To="6" Label="Source1" />
                                    <Edge From="5" To="6" Label="Source2" />
                                    <Edge From="6" To="7" Label="Source1" />
                                    <Edge From="7" To="8" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="ShiftX" />
                                <Property Name="ShiftY" />
                              </Expression>
                              <Expression xsi:type="GroupWorkflow">
                                <Name>Shift</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="ExternalizedMapping">
                                      <Property Name="X" DisplayName="ShiftX" />
                                      <Property Name="Y" DisplayName="ShiftY" />
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="gl:CreateScale">
                                        <gl:X>0</gl:X>
                                        <gl:Y>0</gl:Y>
                                        <gl:Z>1</gl:Z>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>M11,M22</Selector>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="gl:UpdateUniform">
                                        <gl:UniformName>shift</gl:UniformName>
                                        <gl:ShaderName>Image</gl:ShaderName>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="2" Label="Source1" />
                                    <Edge From="1" To="2" Label="Source2" />
                                    <Edge From="2" To="3" Label="Source1" />
                                    <Edge From="3" To="4" Label="Source1" />
                                    <Edge From="4" To="5" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="7" Label="Source1" />
                              <Edge From="3" To="7" Label="Source2" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="7" Label="Source3" />
                              <Edge From="7" To="9" Label="Source1" />
                              <Edge From="8" To="9" Label="Source2" />
                              <Edge From="9" To="10" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Omission</Name>
                              </Expression>
                              <Expression xsi:type="BitwiseNot" />
                              <Expression xsi:type="WorkflowOutput" />
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="BooleanProperty">
                                  <Value>false</Value>
                                </Combinator>
                              </Expression>
                            </Nodes>
                            <Edges>
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>DrawFlash</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:DrawMesh">
                                  <gl:ShaderName>Image</gl:ShaderName>
                                  <gl:MeshName>Quad</gl:MeshName>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="BooleanProperty">
                                  <Value>true</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Omission</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="BooleanProperty">
                                  <Value>true</Value>
                                </Combinator>
                              </Expression>
                            </Nodes>
                            <Edges>
                              <Edge From="1" To="2" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>DrawOmission</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="BooleanProperty">
                                  <Value>false</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:Timer">
                            <gl:DueTime>PT0.25S</gl:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:TakeUntil" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Last" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                        <Expression xsi:type="GroupWorkflow">
                          <Name>InitOmission</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Random</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p2:CreateContinuousUniform">
                                  <p2:Lower>0</p2:Lower>
                                  <p2:Upper>1</p2:Upper>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p2:Sample" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="FloatProperty">
                                  <Value>0.05</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Zip" />
                              </Expression>
                              <Expression xsi:type="LessThanOrEqual" />
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="4" Label="Source1" />
                              <Edge From="3" To="4" Label="Source2" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="6" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="rx:ReplaySubject">
                          <Name>Omission</Name>
                          <rx:BufferSize xsi:nil="true" />
                        </Expression>
                        <Expression xsi:type="rx:Condition">
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
                          <Format>Omission</Format>
                          <Selector xsi:nil="true" />
                          <Name>Allen.Log</Name>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="1" To="4" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="6" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source2" />
                        <Edge From="6" To="8" Label="Source1" />
                        <Edge From="7" To="8" Label="Source2" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
                    <Format>EndFlash</Format>
                    <Selector xsi:nil="true" />
                    <Name>Allen.Log</Name>
                  </Expression>
                  <Expression xsi:type="rx:Defer">
                    <Name>Gray period</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Delay">
                            <rx:DueTime>PT0.5S</rx:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Repeat" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ElementIndex" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Index</Selector>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>FlashCount</Name>
                  </Expression>
                  <Expression xsi:type="rx:TakeWhile">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TotalPresentations</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="LessThan" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="1" To="2" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>LickOnsetEvent</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>CountAborts</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Throttle">
                      <rx:DueTime>PT0.3S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT4.5S</rx:DueTime>
                      <rx:Period>PT0S</rx:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SkipUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Aborts</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Add" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="6" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Aborts</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Aborts</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>CheckNonZero</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="GreaterThan" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>ResetCount</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="LessThan" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
              <Format>Abort</Format>
              <Selector xsi:nil="true" />
              <Name>Allen.Log</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>ResetGoal+Count</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="GreaterThanOrEqual" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>ResetGoal</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SetPresentationGoal</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>PresentationGoal</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Aborts</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
              <Format>Abort-Reset</Format>
              <Selector xsi:nil="true" />
              <Name>Allen.Log</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>ResetCount</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>FlashCount</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PresentationGoal</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Add" />
                  <Expression xsi:type="MulticastSubject">
                    <Name>TotalPresentations</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="5" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>InitTrial</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Random</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Lower" />
                    <Property Name="Upper" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p2:CreateDiscreteUniform">
                      <p2:Lower>10</p2:Lower>
                      <p2:Upper>15</p2:Upper>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p2:Sample" />
                  </Expression>
                  <Expression xsi:type="rx:ReplaySubject">
                    <Name>SetPresentationGoal</Name>
                    <rx:BufferSize xsi:nil="true" />
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>TotalPresentations</Name>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>PresentationGoal</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>Aborts</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="7" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="5" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="16" Label="Source1" />
            <Edge From="15" To="16" Label="Source2" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="16" To="20" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="24" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source2" />
            <Edge From="24" To="25" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
        <Format>ChangeFlash</Format>
        <Selector xsi:nil="true" />
        <Name>Allen.Log</Name>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Change Flash</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Encoder</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Logging.LogEvent.bonsai">
        <Format>Wheel-{0}</Format>
        <Selector>Item2</Selector>
        <Name>Allen.Log</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="8" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="15" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source2" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="28" To="32" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source2" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="37" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="37" Label="Source2" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="41" To="43" Label="Source1" />
      <Edge From="42" To="43" Label="Source2" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="47" To="48" Label="Source1" />
      <Edge From="49" To="52" Label="Source1" />
      <Edge From="50" To="51" Label="Source1" />
      <Edge From="51" To="52" Label="Source2" />
      <Edge From="52" To="53" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>